PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'Gender': u'Female', u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = dogge_2014
  Screen = 1
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Routines
  Routine rating
    RatingScaleComponent rating_2
      pos = 0, -0.4
      high = 8
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine finish
  Routine word
    TextComponent text
      stopVal [duration (s)] = 0.24
      text = BLUE
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine filler
    TextComponent random_filler_word
      stopVal [duration (s)] = 0.04
      text [set every repeat] = $words
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine delay
    TextComponent delay_empty_text
      stopVal [duration (s)] = 0.12
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
  Routine intro
  Routine action
    TextComponent action_word
      stopVal [duration (s)] = 0.96
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        O
        NXTC
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 0.96
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = .96
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    TextComponent text_2
      startVal [time (s)] = .96
      letterHeight = 0.1
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      text:
        Timeout

        Press any key to continue
  Routine outcome
    TextComponent outcome_text
      stopVal [duration (s)] = 1.5
      text = RED
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine exposure
    TextComponent random_string
      stopVal [duration (s)] = 0.04
      text [set every repeat] = $words
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator exposure_loop loopType="TrialHandler"
      loopType = random
      nReps = 2
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      LoopInitiator random_words loopType="TrialHandler"
        conditionsFile = words.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'words': u'GTYRG'},
          {'words': u'GHTUA'},
          {'words': u'ASRWQ'},
          {'words': u'PRTEQ'},
          {'words': u'MPTQY'},
          {'words': u'POCMT'},
          {'words': u'MPUYT'},
          {'words': u'NBTRA'},
          {'words': u'ANRQC'},
          {'words': u'POUYT'},
          {'words': u'XCVBT'},
          {'words': u'POREQ'},
          {'words': u'ASDCZ'},
          {'words': u'MNTYR'},
          {'words': u'MPTYA'},
          {'words': u'RQWET'},
          {'words': u'MNBVT'},
          {'words': u'POTRA'},
          {'words': u'MPTRA'},
          {'words': u'BUIYT'},
          {'words': u'AZXMV'},
          {'words': u'YUTZA'},
          {'words': u'MNBAT'},
          {'words': u'MPTYA'}]
        Routine exposure
      LoopTerminator random_words
      Routine word
    LoopTerminator exposure_loop
    LoopInitiator filler_words loopType="TrialHandler"
      conditionsFile = words.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'words': u'GTYRG'},
        {'words': u'GHTUA'},
        {'words': u'ASRWQ'},
        {'words': u'PRTEQ'},
        {'words': u'MPTQY'},
        {'words': u'POCMT'},
        {'words': u'MPUYT'},
        {'words': u'NBTRA'},
        {'words': u'ANRQC'},
        {'words': u'POUYT'},
        {'words': u'XCVBT'},
        {'words': u'POREQ'},
        {'words': u'ASDCZ'},
        {'words': u'MNTYR'},
        {'words': u'MPTYA'},
        {'words': u'RQWET'},
        {'words': u'MNBVT'},
        {'words': u'POTRA'},
        {'words': u'MPTRA'},
        {'words': u'BUIYT'},
        {'words': u'AZXMV'},
        {'words': u'YUTZA'},
        {'words': u'MNBAT'},
        {'words': u'MPTYA'}]
      Routine filler
    LoopTerminator filler_words
    Routine action
    Routine delay
    Routine outcome
    Routine rating
  LoopTerminator trials
  Routine finish
