PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Use version = latest
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine intro_1
    CodeComponent init_serial_port
      Begin Experiment:
        # DEBUG: On macOS, first run 'socat -d -d pty,raw,echo=0 pty,raw,echo=0' to simulate ports

        # import serial module
        import serial

        # This is for macOS
        #serial = serial.Serial('/dev/ttys001', 57600, rtscts=True, dsrdtr=True)

        # This is for Windows. You must have a COM6 in your device manager
        serial = serial.Serial('COM6', 57600, rtscts=True, dsrdtr=True)

        # Write start of experiment marker
        serial.write(chr(0))
      Begin Routine:
        # Write start of routine marker
        serial.write(chr(1))
      End Experiment:
        # Close serial port
        serial.close()
    ImageComponent intro_image_1
      startVal [time (s)] = 0.0
      image = images/1intro_1.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine intro_2
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = images/2intro_2.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine intro_3
    ImageComponent intro_image_3
      startVal [time (s)] = 0.0
      image = images/3intro_3.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine intro_4
    ImageComponent start_practice_image
      startVal [time (s)] = 0
      image = images/4start_practice.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trials
    CodeComponent calc_delay_1
      Begin Routine:
        delay = 0.0
        outcome_time = 4.4 # initial value, will be changed
        timeout = True
        if agency_level=="low":
          delay = 2.0

        trial_marker_sent = False
      Each Frame:
        # Send single serial trigger for the current trial (when fixation starts)
        if fixation.status==STARTED and (not trial_marker_sent):
          trial_marker_sent = True
          serial.write(chr(trials_loop.thisN))

        # If subject pressed any key, change outcome_time according to the delay value
        if not (respond_key.keys in ['', [], None]):
          outcome_time = 2.4 + respond_key.rt + delay
          timeout = False
    TextComponent fixation
      text [set every repeat] = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    PolygonComponent circle_1
      fillColor [set every repeat] = $color_1
      stopVal [duration (s)] = 0.2
      pos = (-0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 2.0
      nVertices = 99
      size = (0.3, 0.3)
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    PolygonComponent circle_2
      fillColor [set every repeat] = $color_2
      stopVal [duration (s)] = 0.2
      pos = (+0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 2.0
      nVertices = 99
      size = (0.3, 0.3)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent respond_text
      text = ؟
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.4
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent respond_key
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.4
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    ImageComponent outcome_image
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = outcome_time
      image = images/8next_trial.png
      size = (0.8, 0.8)
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  Routine practice
    CodeComponent serial_trigger
      Begin Routine:
        practice_marker_sent = False
      Each Frame:
        if prac_fixation.status == STARTED and (not practice_marker_sent):
          # Mark start of practice (fixation is visible)
          practice_marker_sent = True
          serial.write(chr(practice_loop.thisN))

        #if practice_key.status == STARTED:
          #theseKeys_p = event.getKeys(keyList=['left','right'])
          # Check if any key pressed
          #if len(theseKeys_p) > 0:
            # Pressed!
            #serial.write(chr(practice_loop.thisN))
    TextComponent prac_fixation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      font = Samim
      letterHeight = 0.2
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    PolygonComponent left_circle
      fillColor [set during: practice.ISI_practice] = $left_color
      stopVal [duration (s)] = 0.2
      pos = (-0.267, 0)
      lineWidth = 0
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 1.0
      nVertices = 99
      size = (0.3, 0.3)
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    PolygonComponent right_circle
      fillColor [set during: practice.ISI_practice] = $right_color
      stopVal [duration (s)] = 0.2
      pos = (+0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 1.0
      nVertices = 99
      size = (0.3, 0.3)
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    TextComponent text
      text = ?
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 1.4
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent practice_key
      correctAns = $correct
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 1.4
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    StaticComponent ISI_practice
      stopVal [duration (s)] = 0.4
      startVal [time (s)] = 0.0
  Routine end_of_practice
    ImageComponent image
      startVal [time (s)] = 0.5
      image = images/8end_of_practice.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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  Routine rest
    ImageComponent rest_image_1
      startVal [time (s)] = 0.0
      image = images/9rest.png
      size = (0.8, 0.8)
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    KeyboardComponent rest_key_resp_1
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 5.0
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = images/10thank_you.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_finish
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 10
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  Routine practice_feedback
    CodeComponent check_practice_code
      Begin Routine:
        # Mark start of showing feedback routine
        serial.write(chr(practice_loop.thisN))

        timeout = False
        failed = False
        success = False

        # Extract correct keys from Excel file
        correctKeys = correct.split(',')

        # Add empty responses if correct array contains empty string
        if '' in correctKeys:
          correctKeys.extend([None,[]])

        # check success/failed
        if practice_key.keys in correctKeys:
          success = True
        elif not practice_key.keys in [None,'',[]]:
          if (not '' in correctKeys):
            failed = True

        # Update feedback image according to the success or failed conditions
        if success:
          practice_feedback_image.image = 'images/6practice_success.png'
        elif failed:
          practice_feedback_image.image = 'images/5practice_failed.png'
        else:
          practice_feedback_image.image = 'images/7practice_timeout.png'
          timeout = True
    StaticComponent ISI_practice_result
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent practice_feedback_image
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.5
      image = images/7practice_timeout.png
      size = (0.8, 0.8)
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  Routine block
    CodeComponent calc_delay
      Begin Routine:
        delay = 0.0
        outcome_time = 4.2 # initial value, will be changed
        if agency_level=="low":
          delay = 2.0
      Each Frame:
        if not (respond_key.keys in ['', [], None]):
          outcome_time = 2.2 + respond_key.rt + delay
    TextComponent fixation_2
      text [set every repeat] = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    PolygonComponent circle
      fillColor [set every repeat] = $color_1
      stopVal [duration (s)] = 0.2
      pos = (-0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 2.0
      nVertices = 99
      size = (0.3, 0.3)
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    PolygonComponent circle_3
      fillColor [set every repeat] = $color_2
      stopVal [duration (s)] = 0.2
      pos = (+0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 2.0
      nVertices = 99
      size = (0.3, 0.3)
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    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent respond_text_2
      text = ؟ﺖﺳﺍﺭ ﺎﯾ ﭗﭼ
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.2
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent respond_key_2
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.2
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    ImageComponent outcome_image_2
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = outcome_time
      image = images/8next_trial.png
      size = (0.8, 0.8)
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  Routine rest_2
    ImageComponent rest_image_2
      startVal [time (s)] = 0.0
      image = images/9rest.png
      size = (0.8, 0.8)
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    KeyboardComponent rest_key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 5.0
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  Routine block_3
    CodeComponent calc_delay_3
    TextComponent text_4
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    PolygonComponent polygon_4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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  Routine block_2
    CodeComponent calc_delay_2
    TextComponent text_2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    TextComponent text_3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine intro_1
  Routine intro_2
  Routine intro_3
  Routine intro_4
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'correct': u'left', 'right_color': u'yellow', 'group': 1, 'left_color': u'red', 'practice_condition': 1},
      {'correct': u'left', 'right_color': u'green', 'group': 1, 'left_color': u'red', 'practice_condition': 2},
      {'correct': u'left', 'right_color': u'purple', 'group': 1, 'left_color': u'red', 'practice_condition': 3},
      {'correct': u'left', 'right_color': u'orange', 'group': 1, 'left_color': u'red', 'practice_condition': 4},
      {'correct': u'left', 'right_color': u'yellow', 'group': 1, 'left_color': u'red', 'practice_condition': 5},
      {'correct': u'left', 'right_color': u'brown', 'group': 1, 'left_color': u'red', 'practice_condition': 6},
      {'correct': u'left', 'right_color': u'white', 'group': 1, 'left_color': u'red', 'practice_condition': 7},
      {'correct': u'left', 'right_color': u'yellow', 'group': 1, 'left_color': u'red', 'practice_condition': 8},
      {'correct': u'left', 'right_color': u'green', 'group': 1, 'left_color': u'red', 'practice_condition': 9},
      {'correct': u'left', 'right_color': u'purple', 'group': 1, 'left_color': u'red', 'practice_condition': 10},
      {'correct': u'left,right', 'right_color': u'red', 'group': 2, 'left_color': u'red', 'practice_condition': 11},
      {'correct': u'left,right', 'right_color': u'red', 'group': 2, 'left_color': u'red', 'practice_condition': 12},
      {'correct': u'left,right', 'right_color': u'red', 'group': 2, 'left_color': u'red', 'practice_condition': 13},
      {'correct': u'left,right', 'right_color': u'red', 'group': 2, 'left_color': u'red', 'practice_condition': 14}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
    Routine practice
    Routine practice_feedback
  LoopTerminator practice_loop
  Routine end_of_practice
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'group': 1, 'agency_level': u'high', 'group_name': u'Explicit_R', 'condition': 1, 'color_2': u'red', 'color_1': u'green'},
        {'group': 2, 'agency_level': u'high', 'group_name': u'Implicit_R', 'condition': 2, 'color_2': u'blue', 'color_1': u'purple'},
        {'group': 3, 'agency_level': u'low', 'group_name': u'Explicit_Free', 'condition': 3, 'color_2': u'red', 'color_1': u'red'},
        {'group': 4, 'agency_level': u'high', 'group_name': u'Control', 'condition': 4, 'color_2': u'white', 'color_1': u'orange'},
        {'group': 5, 'agency_level': u'high', 'group_name': u'Explicit_L', 'condition': 5, 'color_2': u'brown', 'color_1': u'red'},
        {'group': 6, 'agency_level': u'high', 'group_name': u'Implicit_L', 'condition': 6, 'color_2': u'orange', 'color_1': u'blue'},
        {'group': 1, 'agency_level': u'low', 'group_name': u'Explicit_R', 'condition': 7, 'color_2': u'red', 'color_1': u'yellow'},
        {'group': 2, 'agency_level': u'high', 'group_name': u'Implicit_R', 'condition': 8, 'color_2': u'blue', 'color_1': u'brown'},
        {'group': 3, 'agency_level': u'high', 'group_name': u'Explicit_Free', 'condition': 9, 'color_2': u'red', 'color_1': u'red'},
        {'group': 4, 'agency_level': u'high', 'group_name': u'Control', 'condition': 10, 'color_2': u'green', 'color_1': u'white'},
        {'group': 5, 'agency_level': u'high', 'group_name': u'Explicit_L', 'condition': 11, 'color_2': u'yellow', 'color_1': u'red'},
        {'group': 6, 'agency_level': u'high', 'group_name': u'Implicit_L', 'condition': 12, 'color_2': u'white', 'color_1': u'blue'}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
      Routine trials
    LoopTerminator trials_loop
    Routine rest
  LoopTerminator blocks
  Routine thankyou
