PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Show mouse = True
  expName = untitled
  Screen = 1
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Routines
  Routine send_char
    CodeComponent code
      Begin Experiment:
        # First run 'socat -d -d pty,raw,echo=0 pty,raw,echo=0' to simulate ports

        import serial

        # TODO Chnage device id to something that works
        #ser = serial.Serial('COM6', 57600, rtscts=True, dsrdtr=True)
        ser = serial.Serial('/dev/ttys001', 57600, rtscts=True, dsrdtr=True)
      Begin Routine:
        #for ch in range(0,256):
        code = chars.thisN

        ser.write(chr(code))
      End Experiment:
        ser.close()
    TextComponent text
      text [set every repeat] = $code
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator chars loopType="TrialHandler"
    loopType = random
    nReps = 256
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    Routine send_char
  LoopTerminator chars
