PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Show mouse = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine introduction
    ImageComponent intro_image_1
      startVal [time (s)] = 0.0
      image = intro_1.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trials
    CodeComponent calc_delay
      Begin Routine:
        if agency_level=="low":
          delay = 2.0
        else:
          delay = 0.0
    TextComponent fixation
      text [set every repeat] = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    TextComponent stimulus_right
      color [set every repeat] = $char_color_2
      stopVal [duration (s)] = 0.2
      pos = (+0.26, 0)
      text [set every repeat] = $char_2
      startVal [time (s)] = 2.0
      font = Samim
      letterHeight = 0.2
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    TextComponent stimulus_left
      color [set every repeat] = $char_color_1
      text [set every repeat] = $char_1
      stopVal [duration (s)] = 0.2
      pos = (-0.26, 0)
      startVal [time (s)] = 2.0
      font = Samim
      letterHeight = 0.2
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    SoundComponent respond_sound
      sound = B
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 2.2+delay
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent respond_text
      text = ؟ﺖﺳﺍﺭ ﺎﯾ ﭗﭼ
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.2+delay
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent respond_key
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.2+delay
      store = first key
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    ImageComponent timeout_image
      startVal [time (s)] = 4.2+delay
      image = press_space.png
      size = (0.8, 0.8)
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    KeyboardComponent timeout_key
      forceEndRoutine = True
      allowedKeys = 'space','escape'
      startVal [time (s)] = 4.2+delay
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  Routine practice
  Routine introduction_2
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = intro_2.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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Flow
  Routine introduction
  Routine introduction_2
  Routine practice
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions_v3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'color_2': u'blue', 'color_1': u'red', 'char_color_1': u'yellow', 'agency_level': u'high', 'char_color_2': u'red', 'group_name': u'explicit', 'condition': 1, 'group': 1, 'char_2': u'B', 'char_1': u'A'},
      {'color_2': u'green', 'color_1': u'red', 'char_color_1': u'yellow', 'agency_level': u'high', 'char_color_2': u'blue', 'group_name': u'implicit', 'condition': 2, 'group': 2, 'char_2': u'C', 'char_1': u'A'},
      {'color_2': u'grey', 'color_1': u'yellow', 'char_color_1': u'yellow', 'agency_level': u'high', 'char_color_2': u'white', 'group_name': u'free', 'condition': 3, 'group': 3, 'char_2': u'D', 'char_1': u'A'},
      {'color_2': u'purple', 'color_1': u'yellow', 'char_color_1': u'yellow', 'agency_level': u'low', 'char_color_2': u'green', 'group_name': u'free', 'condition': 4, 'group': 3, 'char_2': u'D', 'char_1': u'A'},
      {'color_2': u'green', 'color_1': u'red', 'char_color_1': u'yellow', 'agency_level': u'low', 'char_color_2': u'blue', 'group_name': u'implicit', 'condition': 5, 'group': 2, 'char_2': u'C', 'char_1': u'A'},
      {'color_2': u'blue', 'color_1': u'red', 'char_color_1': u'yellow', 'agency_level': u'low', 'char_color_2': u'red', 'group_name': u'explicit', 'condition': 6, 'group': 1, 'char_2': u'B', 'char_1': u'A'},
      {'color_2': u'white', 'color_1': u'blue', 'char_color_1': u'white', 'agency_level': u'high', 'char_color_2': u'white', 'group_name': u'invalid', 'condition': 7, 'group': 0, 'char_2': u'L', 'char_1': u'F'}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
    Routine trials
  LoopTerminator trials_loop
  Routine thankyou
