PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = filevich_et_al
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine intro
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent intro_txt
      text = Hello! The experiment starts after a key press.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine main_trial
    TextComponent fixation_1
      text = +
      stopVal [duration (s)] = 0.85
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    PolygonComponent circle_1
      fillColor = $[0.2,0.2,0.2]
      stopVal [duration (s)] = 0.2
      lineColor = $[0.2,0.2,0.2]
      startVal [time (s)] = 0.85
      nVertices = 90
      size = (0.5, 0.8)
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    TextComponent fixation_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 1.05
      letterHeight = 0.2
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    PolygonComponent circle_2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = .2
      startVal [time (s)] = 1.55
      nVertices = 90
      size = (0.5, 0.8)
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    TextComponent fixation_3
      text = +
      stopVal [duration (s)] = 0.8
      startVal [time (s)] = 1.755
      letterHeight = 0.2
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    KeyboardComponent key_pressed
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 1.75
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    TextComponent trial_finished_msg
      text = Press any key for the next trial.
      startVal [time (s)] = key_pressed_finished
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 2.55
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  Routine finish
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you!

        Press any key to finish the experiment.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator main_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 8
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    Routine main_trial
  LoopTerminator main_trials
  Routine finish
