PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine introduction
  Routine trials
    TextComponent fixation_1
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      font = Samim
      letterHeight = 0.2
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    GratingComponent background_1
      tex = None
      color [set during: trials.ISI] = $back1_color
      stopVal [duration (s)] = 0.2
      units = norm
      startVal [time (s)] = 1.0
      sf = None
      size = (2, 2)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent empty_1
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.2
      font = Samim
      letterHeight = 0.1
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    PolygonComponent circle_1
      fillColor = black
      stopVal [duration (s)] = 0.2
      lineColor = black
      startVal [time (s)] = 1.4
      nVertices = 99
      size = (0.5, 0.5)
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    GratingComponent background_2
      tex = None
      color [set during: trials.ISI] = $back2_color
      stopVal [duration (s)] = 0.2
      units = norm
      startVal [time (s)] = 1.6
      sf = None
      size = (2, 2)
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    PolygonComponent circle_2
      fillColor [set during: trials.ISI] = $circle_color
      stopVal [duration (s)] = 0.2
      lineColor [set during: trials.ISI] = $circle_color
      startVal [time (s)] = 1.6
      nVertices = 99
      size = (0.5, 0.5)
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    TextComponent ITI_1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.8
      letterHeight = 0.1
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    TextComponent finish_message_1
      text = ﺪﯿﻫﺩ ﺭﺎﺸﻓ ﺍﺭ ﯼﺍﻪﻤﮐﺩ ﻪﻣﺍﺩﺍ ﯼﺍﺮﺑ
      startVal [time (s)] = 2.8
      font = Samim
      letterHeight = 0.1
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 2.8
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Flow
  Routine introduction
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions_v2.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'circle_color': u'blue', 'back2_color': u'red', 'back1_color': u'grey', 'condition': 1},
      {'circle_color': u'green', 'back2_color': u'green', 'back1_color': u'white', 'condition': 2},
      {'circle_color': u'white', 'back2_color': u'blue', 'back1_color': u'grey', 'condition': 3},
      {'circle_color': u'purple', 'back2_color': u'white', 'back1_color': u'white', 'condition': 4},
      {'circle_color': u'yellow', 'back2_color': u'purple', 'back1_color': u'grey', 'condition': 5},
      {'circle_color': u'black', 'back2_color': u'yellow', 'back1_color': u'white', 'condition': 6},
      {'circle_color': u'orange', 'back2_color': u'white', 'back1_color': u'grey', 'condition': 7},
      {'circle_color': u'brown', 'back2_color': u'black', 'back1_color': u'white', 'condition': 8},
      {'circle_color': u'cyan', 'back2_color': u'brown', 'back1_color': u'grey', 'condition': 9},
      {'circle_color': u'green', 'back2_color': u'orange', 'back1_color': u'white', 'condition': 10},
      {'circle_color': u'red', 'back2_color': u'cyan', 'back1_color': u'grey', 'condition': 11},
      {'circle_color': u'white', 'back2_color': u'red', 'back1_color': u'white', 'condition': 12},
      {'circle_color': u'purple', 'back2_color': u'green', 'back1_color': u'grey', 'condition': 13},
      {'circle_color': u'yellow', 'back2_color': u'blue', 'back1_color': u'white', 'condition': 14},
      {'circle_color': u'black', 'back2_color': u'white', 'back1_color': u'grey', 'condition': 15},
      {'circle_color': u'cyan', 'back2_color': u'purple', 'back1_color': u'white', 'condition': 16}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
    Routine trials
  LoopTerminator trials_loop
