PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine introduction
    ImageComponent intro_image_1
      startVal [time (s)] = 0.0
      image = intro_1.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trials
    TextComponent fixation_1
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent stimulus_2
      text [set every repeat] = $Char
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 2
      font = Samim
      letterHeight = 0.13
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    TextComponent respond_text_3
      text = ؟ﺖﺳﺍﺭ ﺎﯾ ﭗﭼ
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.2
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.2
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    ImageComponent timeout_image_4
      startVal [time (s)] = 4.2
      image = press_space.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 4.2
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  Routine introduction_2
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = intro_2.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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Flow
  Routine introduction
  Routine introduction_2
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = Book2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Char': u'ABS', u'group': 1L, u'condition': 1L, u'group_name': u'explicit'},
      {u'Char': u'ACS', u'group': 2L, u'condition': 2L, u'group_name': u'implicit'},
      {u'Char': u'ABT', u'group': 3L, u'condition': 3L, u'group_name': u'free'},
      {u'Char': u'ACT', u'group': 3L, u'condition': 4L, u'group_name': u'free'},
      {u'Char': u'BTD', u'group': 2L, u'condition': 5L, u'group_name': u'implicit'},
      {u'Char': u'BCF', u'group': 1L, u'condition': 6L, u'group_name': u'explicit'},
      {u'Char': u'ATD', u'group': 0L, u'condition': 7L, u'group_name': u'invalid'},
      {u'Char': u'AFD', u'group': 0L, u'condition': 8L, u'group_name': u'invalid'},
      {u'Char': u'ASE', u'group': 1L, u'condition': 9L, u'group_name': u'explicit'},
      {u'Char': u'BBD', u'group': 0L, u'condition': 10L, u'group_name': u'invalid'}]
    Routine trials
  LoopTerminator trials_loop
  Routine thankyou
