PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine introduction
    ImageComponent intro_image_1
      startVal [time (s)] = 0.0
      image = introduction.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trials
    TextComponent fixation_1
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent stimulus_2
      text [set every repeat] = $char_1+"  "+$char_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 2
      font = Samim
      letterHeight = 0.3
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    TextComponent respond_text_3
      text = ؟ﺖﺳﺍﺭ ﺎﯾ ﭗﭼ
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.5
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.5
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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Flow
  Routine introduction
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'char_1': u'AB', u'char_2': u'CD', u'condition': 1L, u'group_name': u'explicit'},
      {u'char_1': u'AB', u'char_2': u'DC', u'condition': 2L, u'group_name': u'explicit'},
      {u'char_1': u'AC', u'char_2': u'BD', u'condition': 3L, u'group_name': u'explicit'},
      {u'char_1': u'AC', u'char_2': u'DB', u'condition': 4L, u'group_name': u'explicit'},
      {u'char_1': u'AD', u'char_2': u'CB', u'condition': 5L, u'group_name': u'implicit'},
      {u'char_1': u'AD', u'char_2': u'BC', u'condition': 6L, u'group_name': u'implicit'},
      {u'char_1': u'BA', u'char_2': u'DC', u'condition': 7L, u'group_name': u'free'},
      {u'char_1': u'BA', u'char_2': u'CD', u'condition': 8L, u'group_name': u'free'},
      {u'char_1': u'CA', u'char_2': u'BD', u'condition': 9L, u'group_name': u'free'},
      {u'char_1': u'CA', u'char_2': u'DB', u'condition': 10L, u'group_name': u'free'},
      {u'char_1': u'DA', u'char_2': u'CB', u'condition': 11L, u'group_name': u'free'},
      {u'char_1': u'DA', u'char_2': u'BC', u'condition': 12L, u'group_name': u'free'},
      {u'char_1': u'CD', u'char_2': u'AB', u'condition': 13L, u'group_name': u'explicit'},
      {u'char_1': u'DC', u'char_2': u'AB', u'condition': 14L, u'group_name': u'explicit'},
      {u'char_1': u'BD', u'char_2': u'AC', u'condition': 15L, u'group_name': u'explicit'},
      {u'char_1': u'DB', u'char_2': u'AC', u'condition': 16L, u'group_name': u'explicit'},
      {u'char_1': u'CB', u'char_2': u'AD', u'condition': 17L, u'group_name': u'implicit'},
      {u'char_1': u'BC', u'char_2': u'AD', u'condition': 18L, u'group_name': u'implicit'}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
    Routine trials
  LoopTerminator trials_loop
  Routine thankyou
