PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine introduction
    ImageComponent intro_image_1
      startVal [time (s)] = 0.0
      image = intro_1.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trials
    TextComponent fixation_1
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent stimulus_2
      text [set every repeat] = $char_1+"  "+$char_2
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 2
      font = Samim
      letterHeight = 0.13
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    TextComponent respond_text_3
      text = ؟ﺖﺳﺍﺭ ﺎﯾ ﭗﭼ
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.2
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.2
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    ImageComponent timeout_image_4
      startVal [time (s)] = 4.2
      image = press_space.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 4.2
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  Routine introduction_2
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = intro_2.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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Flow
  Routine introduction
  Routine introduction_2
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions_v3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 1, 'group': 1, 'char_2': u'B', 'char_1': u'A', 'group_name': u'explicit'},
      {'condition': 2, 'group': 2, 'char_2': u'C', 'char_1': u'A', 'group_name': u'implicit'},
      {'condition': 3, 'group': 3, 'char_2': u'D', 'char_1': u'A', 'group_name': u'free'},
      {'condition': 4, 'group': 3, 'char_2': u'D', 'char_1': u'A', 'group_name': u'free'},
      {'condition': 5, 'group': 2, 'char_2': u'C', 'char_1': u'A', 'group_name': u'implicit'},
      {'condition': 6, 'group': 1, 'char_2': u'B', 'char_1': u'A', 'group_name': u'explicit'},
      {'condition': 7, 'group': 0, 'char_2': u'L', 'char_1': u'F', 'group_name': u'invalid'},
      {'condition': 8, 'group': 0, 'char_2': u'W', 'char_1': u'D', 'group_name': u'invalid'},
      {'condition': 9, 'group': 1, 'char_2': u'B', 'char_1': u'A', 'group_name': u'explicit'},
      {'condition': 10, 'group': 0, 'char_2': u'X', 'char_1': u'E', 'group_name': u'invalid'},
      {'condition': 11, 'group': 0, 'char_2': u'O', 'char_1': u'D', 'group_name': u'invalid'},
      {'condition': 12, 'group': 3, 'char_2': u'D', 'char_1': u'A', 'group_name': u'free'},
      {'condition': 13, 'group': 2, 'char_2': u'C', 'char_1': u'A', 'group_name': u'implicit'},
      {'condition': 14, 'group': 2, 'char_2': u'C', 'char_1': u'A', 'group_name': u'implicit'},
      {'condition': 15, 'group': 3, 'char_2': u'C', 'char_1': u'A', 'group_name': u'implicit'},
      {'condition': 16, 'group': 1, 'char_2': u'B', 'char_1': u'A', 'group_name': u'explicit'}]
    Routine trials
  LoopTerminator trials_loop
  Routine thankyou
