PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Show mouse = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine introduction
    ImageComponent intro_image_1
      startVal [time (s)] = 0.0
      image = intro_1.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trials
    CodeComponent calc_delay
      Begin Routine:
        if agency_level=="low":
          delay = 2.0
        else:
          delay = 0.0
    TextComponent fixation
      text [set every repeat] = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    PolygonComponent circle_1
      fillColor [set every repeat] = $color_1
      stopVal [duration (s)] = 0.2
      pos = (-0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 2.0
      nVertices = 99
      size = (0.3, 0.3)
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    PolygonComponent circle_2
      fillColor [set every repeat] = $color_2
      stopVal [duration (s)] = 0.2
      pos = (+0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 2.0
      nVertices = 99
      size = (0.3, 0.3)
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    SoundComponent respond_sound
      sound = B
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 2.2+delay
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent respond_text
      text = ؟ﺖﺳﺍﺭ ﺎﯾ ﭗﭼ
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.2+delay
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent respond_key
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.2+delay
      store = all keys
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    ImageComponent timeout_image
      startVal [time (s)] = 4.2+delay
      image = press_space.png
      size = (0.8, 0.8)
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    KeyboardComponent timeout_key
      forceEndRoutine = True
      allowedKeys = 'space','escape'
      startVal [time (s)] = 4.2+delay
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  Routine practice
  Routine introduction_2
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = intro_2.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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Flow
  Routine introduction
  Routine introduction_2
  Routine practice
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions_v3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'color_2': u'blue', 'color_1': u'red', 'group': 1, 'condition': 1, 'agency_level': u'high', 'char_2': u'B', 'char_1': u'A', 'group_name': u'explicit'},
      {'color_2': u'green', 'color_1': u'red', 'group': 2, 'condition': 2, 'agency_level': u'high', 'char_2': u'C', 'char_1': u'A', 'group_name': u'implicit'},
      {'color_2': u'grey', 'color_1': u'yellow', 'group': 3, 'condition': 3, 'agency_level': u'high', 'char_2': u'D', 'char_1': u'A', 'group_name': u'free'},
      {'color_2': u'purple', 'color_1': u'yellow', 'group': 3, 'condition': 4, 'agency_level': u'low', 'char_2': u'D', 'char_1': u'A', 'group_name': u'free'},
      {'color_2': u'green', 'color_1': u'red', 'group': 2, 'condition': 5, 'agency_level': u'low', 'char_2': u'C', 'char_1': u'A', 'group_name': u'implicit'},
      {'color_2': u'blue', 'color_1': u'red', 'group': 1, 'condition': 6, 'agency_level': u'low', 'char_2': u'B', 'char_1': u'A', 'group_name': u'explicit'},
      {'color_2': u'white', 'color_1': u'blue', 'group': 0, 'condition': 7, 'agency_level': u'high', 'char_2': u'L', 'char_1': u'F', 'group_name': u'invalid'},
      {'color_2': u'blue', 'color_1': u'green', 'group': 0, 'condition': 8, 'agency_level': u'low', 'char_2': u'W', 'char_1': u'D', 'group_name': u'invalid'},
      {'color_2': u'blue', 'color_1': u'red', 'group': 1, 'condition': 9, 'agency_level': u'high', 'char_2': u'B', 'char_1': u'A', 'group_name': u'explicit'}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
    Routine trials
  LoopTerminator trials_loop
  Routine thankyou
