PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = agency-v4
  Units = use prefs
  Screen = 1
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Routines
  Routine Introduction
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will see several word strings
        if these strigs contain B letter Click Space

        Click any key to continue
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine trial
    TextComponent Text
      text [set every repeat] = $text
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Trial
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Test.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'text': u'TBC'},
      {u'text': u'ARZ'},
      {u'text': u'BTY'},
      {u'text': u'ARB'},
      {u'text': u'RDF'},
      {u'text': u'CRF'}]
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = Test.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'text': u'TBC'},
        {u'text': u'ARZ'},
        {u'text': u'BTY'},
        {u'text': u'ARB'},
        {u'text': u'ACD'}]
      Routine trial
    LoopTerminator trials_2
    Routine Trial
  LoopTerminator trials
