PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine introduction
    ImageComponent intro_image_1
      startVal [time (s)] = 0.0
      image = intro_1.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trials
    TextComponent fixation_1
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent stimulus_2
      text [set every repeat] = $word
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 2
      font = Samim
      letterHeight = 0.3
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'left','right','space'
      startVal [time (s)] = 2.0
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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  Routine introduction_2
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = intro_2.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine pre_trials
Flow
  Routine introduction
  Routine introduction_2
  LoopInitiator trials_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine pre_trials
    LoopInitiator words_loop loopType="TrialHandler"
      conditionsFile = conditions_v5.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'group': 1, 'group_name': u'explicit', 'condition': 1, 'word': u'TABY', 'char_2': u'B', 'char_1': u'A'},
        {'group': 2, 'group_name': u'implicit', 'condition': 2, 'word': u'YACT', 'char_2': u'C', 'char_1': u'A'},
        {'group': 3, 'group_name': u'free', 'condition': 3, 'word': u'PQAD', 'char_2': u'D', 'char_1': u'A'},
        {'group': 3, 'group_name': u'free', 'condition': 4, 'word': u'ADLK', 'char_2': u'D', 'char_1': u'A'},
        {'group': 2, 'group_name': u'implicit', 'condition': 5, 'word': u'ACNY', 'char_2': u'C', 'char_1': u'A'},
        {'group': 1, 'group_name': u'explicit', 'condition': 6, 'word': u'NYAB', 'char_2': u'B', 'char_1': u'A'},
        {'group': 0, 'group_name': u'invalid', 'condition': 7, 'word': u'FLTY', 'char_2': u'L', 'char_1': u'F'},
        {'group': 0, 'group_name': u'invalid', 'condition': 8, 'word': u'DWTR', 'char_2': u'W', 'char_1': u'D'},
        {'group': 1, 'group_name': u'explicit', 'condition': 9, 'word': u'ABUI', 'char_2': u'B', 'char_1': u'A'},
        {'group': 0, 'group_name': u'invalid', 'condition': 10, 'word': u'EXYO', 'char_2': u'X', 'char_1': u'E'},
        {'group': 0, 'group_name': u'invalid', 'condition': 11, 'word': u'DOPQ', 'char_2': u'O', 'char_1': u'D'},
        {'group': 3, 'group_name': u'free', 'condition': 12, 'word': u'OIAD', 'char_2': u'D', 'char_1': u'A'},
        {'group': 2, 'group_name': u'implicit', 'condition': 13, 'word': u'AGTR', 'char_2': u'C', 'char_1': u'A'},
        {'group': 2, 'group_name': u'implicit', 'condition': 14, 'word': u'HHAC', 'char_2': u'C', 'char_1': u'A'}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
      Routine trials
    LoopTerminator words_loop
  LoopTerminator trials_loop
  Routine thankyou
