PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine trials
    TextComponent stimulus_2
      text [set every repeat] = $words
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0
      font = Samim
      letterHeight = 0.3
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  Routine intro
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = introduction.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Post_trials
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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Flow
  Routine intro
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'file': u'words1.xlsx'},
      {u'file': u'words2.xlsx'},
      {u'file': u'words3.xlsx'}]
    LoopInitiator words_loop loopType="TrialHandler"
      conditionsFile = $file
      loopType = random
      nReps = 1
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      Routine trials
    LoopTerminator words_loop
    Routine Post_trials
  LoopTerminator trials_loop
  Routine thankyou
