PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine trials
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent stimulus_2
      text [set every repeat] = $word
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0
      font = Samim
      letterHeight = 0.3
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'left','right','space'
      startVal [time (s)] = 0
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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  Routine intro
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = intro.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Post_trials
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials_loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator words_loop loopType="TrialHandler"
      conditionsFile = Book2.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'word': u'ABD', u'condition': 1L},
        {u'word': u'XDS', u'condition': 2L},
        {u'word': u'ACE', u'condition': 3L},
        {u'word': u'WDE', u'condition': 4L},
        {u'word': u'BCS', u'condition': 5L}]
      Routine trials
    LoopTerminator words_loop
    Routine Post_trials
  LoopTerminator trials_loop
  Routine thankyou
