PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine trials
    PolygonComponent polygon_2
      fillColor [set every repeat] = $color
      stopVal [duration (s)] = 0.2
      lineColor [set every repeat] = $color
      startVal [time (s)] = 0.0
      nVertices = 99
      size = (0.3, 0.3)
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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  Routine intro
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = intro_color.jpg
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine post_trials
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = orange
      stopVal [duration (s)] = 1.0
      lineColor = orange
      startVal [time (s)] = polygon_start_time+delay
      size = (0.2, 0.2)
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    CodeComponent code
      Begin Routine:
        polygon_start_time = 3
        sound_start_time = 3
      Each Frame:
        if key_resp_3.keys!=[]:
          polygon_start_time = key_resp_3.rt
        if key_resp_3.keys!=[]:
          sound_start_time = key_resp_3.rt
    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = polygon_start_time
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    CodeComponent code_2
      Begin Routine:
        if agency_level=="low":
          delay = 1.0
        else:
          delay = 0.0
    SoundComponent sound_1
      sound = B
      stopVal [duration (s)] = 1
      startVal [time (s)] = sound_start_time+delay
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  Routine pre_trials
    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  Routine intro
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'file': u'words1.xlsx', u'agency_level': u'high'},
      {u'file': u'words2.xlsx', u'agency_level': u'high'},
      {u'file': u'words3.xlsx', u'agency_level': u'high'},
      {u'file': u'words4.xlsx', u'agency_level': u'low'},
      {u'file': u'words5.xlsx', u'agency_level': u'low'},
      {u'file': u'words6.xlsx', u'agency_level': u'high'}]
    Routine pre_trials
    LoopInitiator words_loop loopType="TrialHandler"
      conditionsFile = $file
      loopType = random
      nReps = 1
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      Routine trials
    LoopTerminator words_loop
    Routine post_trials
  LoopTerminator trials_loop
  Routine thankyou
